# Generated by Configurator on Sun Mar 14 15:59:50 EDT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM9,SerialManager,COM9
Device,COM5,SerialManager,COM5
Device,COM1,SerialManager,COM1
Device,COM7,SerialManager,COM7
Device,COM8,SerialManager,COM8
Device,COM4,SerialManager,COM4
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,XYStage,ASIStage,XYStage
Device,XCite-Exacte,XCite120PC_Exacte,XCite-Exacte
Device,Arduino-Hub,Arduino,Arduino-Hub
Device,Arduino-Switch,Arduino,Arduino-Switch
Device,Arduino-Shutter,Arduino,Arduino-Shutter
Device,UserDefinedShutter,UserDefinedSerial,UserDefinedShutter
Device,UserDefinedStateDevice,UserDefinedSerial,UserDefinedStateDevice
Device,UserDefinedShutter-1,UserDefinedSerial,UserDefinedShutter
Device,UserDefinedStateDevice-1,UserDefinedSerial,UserDefinedStateDevice
Device,Mightex_BLS(USB),Mightex_BLS,Mightex_BLS(USB)
Device,MightexPolygon,MightexPolygon,MightexPolygon
Device,DTOL-DAC-0,DTOpenLayer,DTOL-DAC-0

# Pre-init settings for devices
Property,COM9,AnswerTimeout,500.0000
Property,COM9,BaudRate,57600
Property,COM9,DTR,Disable
Property,COM9,DataBits,8
Property,COM9,DelayBetweenCharsMs,0.0000
Property,COM9,Fast USB to Serial,Disable
Property,COM9,Handshaking,Off
Property,COM9,Parity,None
Property,COM9,StopBits,1
Property,COM9,Verbose,0
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,19200
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DTR,Disable
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,19200
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Disable
Property,COM7,Handshaking,Off
Property,COM7,Parity,Even
Property,COM7,StopBits,2
Property,COM7,Verbose,1
Property,COM8,AnswerTimeout,500.0000
Property,COM8,BaudRate,19200
Property,COM8,DTR,Disable
Property,COM8,DataBits,8
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Fast USB to Serial,Disable
Property,COM8,Handshaking,Off
Property,COM8,Parity,Even
Property,COM8,StopBits,2
Property,COM8,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,XYStage,Port,COM4
Property,XCite-Exacte,Port,COM5
Property,Arduino-Hub,Logic,Normal
Property,Arduino-Hub,Port,COM9
Property,UserDefinedShutter,Close-command,1ESH2 1\r\n
Property,UserDefinedShutter,Close-response,
Property,UserDefinedShutter,Command mode,ASCII-no-terminator
Property,UserDefinedShutter,Initialize-command,1L 1\r\n 1INIT\r\n
Property,UserDefinedShutter,Initialize-response,
Property,UserDefinedShutter,Open-command,1ESH2 0\r\n
Property,UserDefinedShutter,Open-response,
Property,UserDefinedShutter,Port,COM7
Property,UserDefinedShutter,QueryState-closed-response,
Property,UserDefinedShutter,QueryState-command,
Property,UserDefinedShutter,QueryState-open-response,
Property,UserDefinedShutter,Response detection,Ignore responses
Property,UserDefinedShutter,Shutdown-command,Lp1 0 \r\n 1L 0\r\n 
Property,UserDefinedShutter,Shutdown-response,
Property,UserDefinedStateDevice,Command mode,ASCII-no-terminator
Property,UserDefinedStateDevice,Initialize-command,1MU2 1\r\n
Property,UserDefinedStateDevice,Initialize-response,
Property,UserDefinedStateDevice,Number of positions,8
Property,UserDefinedStateDevice,Port,COM7
Property,UserDefinedStateDevice,Response detection,Ignore responses
Property,UserDefinedStateDevice,Shutdown-command,
Property,UserDefinedStateDevice,Shutdown-response,
Property,UserDefinedShutter-1,Close-command,1ESH1 1\r\n
Property,UserDefinedShutter-1,Close-response,
Property,UserDefinedShutter-1,Command mode,ASCII-no-terminator
Property,UserDefinedShutter-1,Initialize-command,1L 1\r\n 1INIT\r\n
Property,UserDefinedShutter-1,Initialize-response,
Property,UserDefinedShutter-1,Open-command,1ESH1 0\r\n
Property,UserDefinedShutter-1,Open-response,
Property,UserDefinedShutter-1,Port,COM8
Property,UserDefinedShutter-1,QueryState-closed-response,
Property,UserDefinedShutter-1,QueryState-command,
Property,UserDefinedShutter-1,QueryState-open-response,
Property,UserDefinedShutter-1,Response detection,Ignore responses
Property,UserDefinedShutter-1,Shutdown-command,
Property,UserDefinedShutter-1,Shutdown-response,
Property,UserDefinedStateDevice-1,Command mode,ASCII-no-terminator
Property,UserDefinedStateDevice-1,Initialize-command,1MU1 1\r\n
Property,UserDefinedStateDevice-1,Initialize-response,
Property,UserDefinedStateDevice-1,Number of positions,8
Property,UserDefinedStateDevice-1,Port,COM8
Property,UserDefinedStateDevice-1,Response detection,Ignore responses
Property,UserDefinedStateDevice-1,Shutdown-command,
Property,UserDefinedStateDevice-1,Shutdown-response,
Property,Mightex_BLS(USB),Devices,Sirius BLS-IO04-U  :04-161116-016
Property,DTOL-DAC-0,MaxV,5.0000
Property,DTOL-DAC-0,MinV,0.0000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Arduino-Switch,Arduino-Hub
Parent,Arduino-Shutter,Arduino-Hub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,XCite-Exacte
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Arduino-Switch
Label,Arduino-Switch,63,63
Label,Arduino-Switch,62,62
Label,Arduino-Switch,61,61
Label,Arduino-Switch,60,60
Label,Arduino-Switch,59,59
Label,Arduino-Switch,58,58
Label,Arduino-Switch,57,57
Label,Arduino-Switch,56,56
Label,Arduino-Switch,55,55
Label,Arduino-Switch,54,54
Label,Arduino-Switch,53,53
Label,Arduino-Switch,52,52
Label,Arduino-Switch,51,51
Label,Arduino-Switch,50,50
Label,Arduino-Switch,49,49
Label,Arduino-Switch,48,48
Label,Arduino-Switch,47,47
Label,Arduino-Switch,46,46
Label,Arduino-Switch,45,45
Label,Arduino-Switch,44,44
Label,Arduino-Switch,43,43
Label,Arduino-Switch,42,42
Label,Arduino-Switch,41,41
Label,Arduino-Switch,40,40
Label,Arduino-Switch,39,39
Label,Arduino-Switch,38,38
Label,Arduino-Switch,37,37
Label,Arduino-Switch,36,36
Label,Arduino-Switch,35,35
Label,Arduino-Switch,34,34
Label,Arduino-Switch,33,33
Label,Arduino-Switch,32,32
Label,Arduino-Switch,31,31
Label,Arduino-Switch,30,30
Label,Arduino-Switch,29,29
Label,Arduino-Switch,28,28
Label,Arduino-Switch,27,27
Label,Arduino-Switch,26,26
Label,Arduino-Switch,25,25
Label,Arduino-Switch,24,24
Label,Arduino-Switch,23,23
Label,Arduino-Switch,22,22
Label,Arduino-Switch,21,21
Label,Arduino-Switch,20,20
Label,Arduino-Switch,19,19
Label,Arduino-Switch,18,18
Label,Arduino-Switch,17,17
Label,Arduino-Switch,16,16
Label,Arduino-Switch,15,15
Label,Arduino-Switch,14,14
Label,Arduino-Switch,13,13
Label,Arduino-Switch,12,12
Label,Arduino-Switch,11,11
Label,Arduino-Switch,10,10
Label,Arduino-Switch,9,9
Label,Arduino-Switch,8,8
Label,Arduino-Switch,7,7
Label,Arduino-Switch,6,6
Label,Arduino-Switch,5,5
Label,Arduino-Switch,4,4
Label,Arduino-Switch,3,3
Label,Arduino-Switch,2,2
Label,Arduino-Switch,1,1
Label,Arduino-Switch,0,0
# UserDefinedStateDevice
Label,UserDefinedStateDevice,7,BF
Label,UserDefinedStateDevice,6,BF
Label,UserDefinedStateDevice,5,GFP-FAM
Label,UserDefinedStateDevice,4,Cy5
Label,UserDefinedStateDevice,3,Texas Red
Label,UserDefinedStateDevice,2,BF
Label,UserDefinedStateDevice,1,Cy3
Label,UserDefinedStateDevice,0,BF
# UserDefinedStateDevice-1
Label,UserDefinedStateDevice-1,7,Empty
Label,UserDefinedStateDevice-1,6,Empty
Label,UserDefinedStateDevice-1,5,Empty
Label,UserDefinedStateDevice-1,4,Empty
Label,UserDefinedStateDevice-1,3,Empty
Label,UserDefinedStateDevice-1,2,Patterning ON (dichroic mirror)
Label,UserDefinedStateDevice-1,1,Empty
Label,UserDefinedStateDevice-1,0,Empty

# Configuration presets

# Group: BF Intensity
# Preset: NewPreset
ConfigGroup,BF Intensity,NewPreset,DTOL-DAC-0,Volts,5.0000


# Group: Patterning Turret (make sure Shutters are ON)
# Preset: Empty
ConfigGroup,Patterning Turret (make sure Shutters are ON),Empty,UserDefinedStateDevice-1,Label,Empty

# Preset: Patterning ON (dichroic mirror)
ConfigGroup,Patterning Turret (make sure Shutters are ON),Patterning ON (dichroic mirror),UserDefinedStateDevice-1,Label,Patterning ON (dichroic mirror)


# Group: LED Intensity
# Preset: NewPreset
ConfigGroup,LED Intensity,NewPreset,XCite-Exacte,Lamp-Intensity,61


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,UserDefinedShutter,State,1
ConfigGroup,System,Startup,UserDefinedStateDevice,SetPosition-command-0,1MU2 1\r\n
ConfigGroup,System,Startup,UserDefinedStateDevice,SetPosition-command-1,1MU2 2\r\n
ConfigGroup,System,Startup,UserDefinedStateDevice,SetPosition-command-2,1MU2 3\r\n
ConfigGroup,System,Startup,UserDefinedStateDevice,SetPosition-command-3,1MU2 4\r\n
ConfigGroup,System,Startup,UserDefinedStateDevice,SetPosition-command-4,1MU2 5\r\n
ConfigGroup,System,Startup,UserDefinedStateDevice,SetPosition-command-5,1MU2 6\r\n
ConfigGroup,System,Startup,UserDefinedStateDevice,SetPosition-command-6,1MU2 7\r\n
ConfigGroup,System,Startup,UserDefinedStateDevice,SetPosition-command-7,1MU2 8\r\n
ConfigGroup,System,Startup,UserDefinedStateDevice-1,SetPosition-command-0,1MU1 1\r\n
ConfigGroup,System,Startup,UserDefinedStateDevice-1,SetPosition-command-1,1MU1 2\r\n
ConfigGroup,System,Startup,UserDefinedStateDevice-1,SetPosition-command-2,1MU1 3\r\n
ConfigGroup,System,Startup,UserDefinedStateDevice-1,SetPosition-command-3,1MU1 4\r\n
ConfigGroup,System,Startup,UserDefinedStateDevice-1,SetPosition-command-4,1MU1 5\r\n
ConfigGroup,System,Startup,UserDefinedStateDevice-1,SetPosition-command-5,1MU1 6\r\n
ConfigGroup,System,Startup,UserDefinedStateDevice-1,SetPosition-command-6,1MU1 7\r\n
ConfigGroup,System,Startup,UserDefinedStateDevice-1,SetPosition-command-7,1MU1 8\r\n
ConfigGroup,System,Startup,HamamatsuHam_DCAM,Binning,2x2
ConfigGroup,System,Startup,XYStage,JoyStick Reverse,On


# Group: Shutters
# Preset: 1
ConfigGroup,Shutters,1,UserDefinedShutter,State,1
ConfigGroup,Shutters,1,UserDefinedShutter-1,State,1

# Preset: 0
ConfigGroup,Shutters,0,UserDefinedShutter,State,0
ConfigGroup,Shutters,0,UserDefinedShutter-1,State,0


# Group: Filter Turret (make sure Shutters are ON)
# Preset: BF
ConfigGroup,Filter Turret (make sure Shutters are ON),BF,UserDefinedStateDevice,Label,BF
ConfigGroup,Filter Turret (make sure Shutters are ON),BF,Core,AutoShutter,0
ConfigGroup,Filter Turret (make sure Shutters are ON),BF,HamamatsuHam_DCAM,Exposure,10.0172

# Preset: GFP-FAM
ConfigGroup,Filter Turret (make sure Shutters are ON),GFP-FAM,UserDefinedStateDevice,Label,GFP-FAM
ConfigGroup,Filter Turret (make sure Shutters are ON),GFP-FAM,Core,AutoShutter,1
ConfigGroup,Filter Turret (make sure Shutters are ON),GFP-FAM,HamamatsuHam_DCAM,Exposure,400.0050

# Preset: Cy5
ConfigGroup,Filter Turret (make sure Shutters are ON),Cy5,UserDefinedStateDevice,Label,Cy5
ConfigGroup,Filter Turret (make sure Shutters are ON),Cy5,Core,AutoShutter,1
ConfigGroup,Filter Turret (make sure Shutters are ON),Cy5,HamamatsuHam_DCAM,Exposure,400.0050

# Preset: Texas Red
ConfigGroup,Filter Turret (make sure Shutters are ON),Texas Red,UserDefinedStateDevice,Label,Texas Red
ConfigGroup,Filter Turret (make sure Shutters are ON),Texas Red,Core,AutoShutter,1
ConfigGroup,Filter Turret (make sure Shutters are ON),Texas Red,HamamatsuHam_DCAM,Exposure,400.0050

# Preset: Cy3
ConfigGroup,Filter Turret (make sure Shutters are ON),Cy3,UserDefinedStateDevice,Label,Cy3
ConfigGroup,Filter Turret (make sure Shutters are ON),Cy3,Core,AutoShutter,1
ConfigGroup,Filter Turret (make sure Shutters are ON),Cy3,HamamatsuHam_DCAM,Exposure,400.0050




# PixelSize settings

